[[protocol]]
# V     start   duration period repeats
-80     0       400     0       0
-70     next    100     0       0
-80     next    300     0       0
-60     next    100     0       0
-80     next    300     0       0
-50     next    100     0       0
-80     next    300     0       0
-40     next    100     0       0
-80     next    300     0       0
-30     next    100     0       0
-80     next    300     0       0
-20     next    100     0       0
-80     next    300     0       0
-10     next    100     0       0
-80     next    300     0       0
-1      next    100     0       0
-80     next    300     0       0
10      next    100     0       0
-80     next    300     0       0
20      next    100     0       0
-80     next    300     0       0
30      next    100     0       0
-80     next    300     0       0
40      next    100     0       0
-80     next    300     0       0
50      next    100     0       0
-80     next    300     0       0
60      next    100     0       0
-80     next    300     0       0
