[[protocol]]
# V     start   duration period repeats
-80     0       250     0       0
-120    next    50      0       0
-120    next    400     0       0
-80     next    200     0       0
40      next    1000    0       0
-120    next    500     0       0
-80     next    1000    0       0
-40     next    500     0       0
-60     next    500     0       0
-20     next    500     0       0
-40     next    500     0       0
0       next    500     0       0
-20     next    500     0       0
20      next    500     0       0
0       next    500     0       0
40      next    500     0       0
20      next    500     0       0
40      next    500     0       0
0       next    500     0       0
20      next    500     0       0
-20     next    500     0       0
0       next    500     0       0
-40     next    500     0       0
-20     next    500     0       0
-60     next    500     0       0
-40     next    500     0       0
-80     next    1000    0       0
40      next    500     0       0
-70     next    10      0       0
-70     next    100     0       0
-120    next    390     0       0
-80     next    500     0       0
